OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Reads file acquired from acqusition script
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Bandpass filter filtering the raw EEG signal.
  Per default set to [8-30Hz] to capture mu-waves,
  but might need to be adjusted for different subjects
Comment
  Stimulation based epoching boxes sends the correct signals
   to the CSP filter trainers based on stimulations.
  Per default the filters sends signals to the trainers based on the following stimulations:
  OVTK_GDF_LEFT
  OVTK_GDF_RIGHT
  OVTK_GDF_UP
Comment
  At the end of the training process,
  the CSP trainer saves a configuration file and outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to stop the scenario.

Generic stream reader => #0
  Filename = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/signals/Final_run/motor-imagery-csp-CE-Sig_Final4-[2019.05.15-14.13.25].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Stimulations=#2.Output stream 2, Signal condition 1=#3, Signal condition 2=#4 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/Final_Run/csp_Right_Left_CEF4.cfg
  Filter dimension = 6
  Save as box config = true
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Up (Both)" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
Stimulations=#2.Output stream 2, Signal condition 1=#3, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/Final_Run/csp_right_up_CEF4.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Stimulations=#2.Output stream 2, Signal condition 1=#4, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/Final_Run/csp_left_up_CEF4.cfg
  Filter dimension = 6
  Save as box config = true
