OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

0x341d3912 Generic stream reader
  Filename = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/signals/motor-imagery-csp-CE-Sig2-[2019.04.22-15.40.31].ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 2=#1.Signal stream, Input stream 3=#1.Stimulations -> 0x341d3912 Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/Eval/motor-imagery-csp-CE-Online-FINAL-Eval-[$core{date}-$core{time}].ov
  Use compression = false
#1.Signal stream -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Right-Left CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/Final_Run/csp_Right_Left_CEF3.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Features=#9 -> Right-Left Classifier processor => #10
  Filename to load configuration from = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/Classifiers/Final_Run/classifier_right_left_CEF3LDA.cfg
#3 -> Right Up CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/Final_Run/csp_right_up_CEF3.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Features=#16 -> Right-Up Classifier processor => #17
  Filename to load configuration from = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/Classifiers/Final_Run/classifier_right_up_CEF3LDA.cfg
#3 -> Left Up CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/Final_Run/csp_left_up_CEF3.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #23
Features=#23 -> Left-Up Classifier processor => #24
  Filename to load configuration from = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/Classifiers/Final_Run/classifier_left_up_CEF3LDA.cfg
In1=#10.Probability values, In2=#17.Probability values, In3=#24.Probability values -> Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files/MATLAB/R2019a/bin/matlab.exe
  Matlab working directory = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/MatlabScripts
  Initialize function = threeclass_probability_Matrix_Initialize
  Process function = Stim_prob_dem_Process2
  Uninitialize function = threeclass_probability_Matrix_Uninitialize
  Output stimulations = false
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
0x341d3912 Motor Imagery BCI Stimulator => #27
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
  Third Class = OVTK_GDF_Up
Stimulations=#27, Amplitude=#10.Hyperplane distance -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
