OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Overview

  Reads a recorded file from the online steering
  in order to evaluate performance of said run.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filters produced previously
  are used prior to the feature extraction.
Comment
  Feature extraction is applied.
  This consists of two simple DSP algorithms
  extracting power, and averaging over time.
  These are then converted to feature vectors for the classifiers to use.
Comment
  Feature vectors are classified with classifier of choice
  (here either SVM or LDA)

  MATLAB scripting box then takes the probabilities
  and converts to a confusion matrix which is outputted
  as a workspace, where it can then be plotted.
  Alternatively, the OpenViBE box "Matrix display"
  can be used with small modifications to the matlab scipt.

Generic stream reader => #0
  Filename = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/signals/motor-imagery-csp-CE-Sig_Final-[2019.05.10-13.50.06].ov
#0.Output Stimulations -> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output Signal -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Spatial Filter "Right Left CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/csp_right_left_CEF.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #8
Features=#8 -> Classifier processor "Right Left Classifier" => #9
  Filename to load configuration from = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/Classifiers/classifier_right_left_CEFSVM.cfg
#2 -> Spatial Filter "Right Up CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/csp_right_up_CEF.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Features=#15 -> Classifier processor "Right Up Classifier" => #16
  Filename to load configuration from = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/Classifiers/classifier_right_up_CEFSVM.cfg
#2 -> Spatial Filter "Left Up CSP filter"
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/CSPFilters/csp_left_up_CEF.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #22
Features=#22 -> Classifier processor "Left Up Classifier" => #23
  Filename to load configuration from = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/Classifiers/classifier_left_up_CEFSVM.cfg
In1=#9.Probability values, In2=#16.Probability values, In3=#23.Probability values, Stim=#0.Output Stimulations -> 0x341d3912 Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files/MATLAB/R2019a/bin/win64/MATLAB.exe
  Matlab working directory = C:/Users/carle/Dropbox/Bachelorprojekt/OpenVIBE_kode/Med_Matlab/3Class_Trainer/MatlabScripts/EvalTestMatlab
  Initialize function = EvalTest_Matrix_Initialize
  Process function = EvalTest_Matrix_Process
  Uninitialize function = EvalTest_Matrix_Uninitialize
